PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1366, 768]
  expName = ShapeDimExp
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Routines
  Routine trial
    DotsComponent dots
      coherence = 1.0
      dir = 0.0
      dotLife = 0
      dotSize = 1
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 1.0
      nDots = 100
      noiseDots = position
      opacity = 0.4
      refreshDots = repeat
      signalDots = same
      speed = 1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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  Routine instructions
    TextComponent rules
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hello!

        Welcome to my game.

        The aim of the game is to press left for square and right for circle as quickly as you can!

        Press Space bar to continue.
        Good luck!
    KeyboardComponent begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine dimmness
    TextComponent cros2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    KeyboardComponent dimResp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.8
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    ImageComponent opaque
      contrast = 0.5
      image [set every repeat] = $picture
      opacity = 0.5
      size = (0.3, 0.3)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.2
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  Routine rtshape
    KeyboardComponent shapeResp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      store = first key
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    TextComponent cross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
      text = +
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    ImageComponent image
      contrast = 0.5
      image [set every repeat] = $colourshape
      opacity [set every repeat] = 0.5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.1
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  Routine routine_2ndInstructions
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Well done!

        Now onto the second part!

        This time, a very dim shape may or may not appear.

        If you see a dim square, press left. If you see a dim circle, press right.

        Press space bar to begin.
        Good luck!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent ending
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Well done!

        Have a Merry Christmas!

        :)
Flow
  Routine instructions
  LoopInitiator loops loopType="TrialHandler"
    conditionsFile = dimshape.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'circle.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'},
      {'shape': 'circle', 'colourshape': 'square.png', 'picture': 'circledim.png', 'correctAns': 'right'}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
    Routine rtshape
  LoopTerminator loops
  Routine routine_2ndInstructions
  LoopInitiator newname loopType="TrialHandler"
    conditionsFile = dimshape.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine dimmness
  LoopTerminator newname
  Routine thanks
